PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = onwuakpa_BOID_CUNGA.1.2025v.12092024
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Instruction4baseline
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    TextComponent Guide4baseline
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, we will take the baseline. Please focus on the white object at the center of the screen, and do the best you can to minimize any movements. It will last for 5 minutes.

        Press the SPACE bar to continue.
    KeyboardComponent Forward2baseline
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome_scr
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    TextComponent Welcome_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome, and congratulations on earning the right to participate in this study.
        You will be asked by the computer to do a couple of tasks. Please pay attention, and if you have any questions, raise your hand, and we will attend to you.

        Please press the space bar to continue.
    KeyboardComponent Forward2baseline_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Baseline
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    ImageComponent Baseline_fixation
      image = Whiteobject.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Instruct4tasks
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    TextComponent Guide2tasks_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, we will ask you to do a couple of tasks and answer some questions. Please do them to the best of your ability.

        Please press the SPACE bar to continue.
    KeyboardComponent Forward2task1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Task1_2
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  Routine Task1
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    TextComponent Intro_info_ID
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please open the envelope, and identify the name on the envelope. Please say the name loud to yourself.

        Press the SPACE bar to continue.
    KeyboardComponent Forward2Xtrainfo_ID
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ID_Xtrainfo
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    TextComponent Xtrainfo_ID
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The person you correctly identified did not earn the right to participate in this study and earn some money. He/She needs some financial assitance to take care of lunch, transportation, and other financial costs incurred as a reuslt of preparations to participate in this study.
        When you are ready to continue, please press the SPACE bar and follow the prompt.
    KeyboardComponent Forward2donate
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Individual_donation
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    TextComponent Request4donation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please indicate how much you would like to donate to the person indentified as needing some financial help. Put your donation in the envelope at the end of this session.

        NOTE:


        Please press the SPACE bar to continue
    KeyboardComponent Forward2contribution
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine last_stop_routine
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    KeyboardComponent key_resp
      allowedKeys = '0','1','2','3','4','5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent option_0
      letterHeight = 0.05
      pos = (0.0, -0.4)
      startVal [time (s)] = 0.0
      text = Press 0 - 0
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    TextComponent option_1
      letterHeight = 0.05
      pos = (0.0, -0.3)
      startVal [time (s)] = 0.0
      text = Press 1 - 50
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    TextComponent option_2
      letterHeight = 0.05
      pos = (0.0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 2 - 100
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    TextComponent option_3
      letterHeight = 0.05
      pos = (0.0, -0.1)
      startVal [time (s)] = 0.0
      text = Press 3 - 150
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    TextComponent option_4
      letterHeight = 0.05
      pos = (0.0, 0.0)
      startVal [time (s)] = 0.0
      text = press 4 - 200
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    TextComponent option_5
      letterHeight = 0.05
      pos = (0.0, 0.1)
      startVal [time (s)] = 0.0
      text = press 5 - 250
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    TextComponent the_choice
      letterHeight = 0.05
      pos = (0.0, 0.4)
      startVal [time (s)] = 0.0
      text = Please make a selection
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    MouseComponent mouse
      clickable = option_0,option_1,option_2,option_3,option_4,option_5
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        win.mouseVisible= True

        def checkTheMouse():
            if(option_0.contains(mouse)):
                the_choice.text =   'You chose to give 0 NAIRA. To confirm click the space bar'
            if(option_1.contains(mouse)):
                the_choice.text =    'You chose to give 50 NAIRA. To confirm click the space bar'

            if(option_2.contains(mouse)):
                the_choice.text =   'You chose to give 100 NAIRA. To confirm click the space bar'

            if(option_3.contains(mouse)):
                the_choice.text =   'You chose to give 150 NAIRA. To confirm click the space bar'

            if(option_4.contains(mouse)):
                the_choice.text =    'You chose to give 200 NAIRA To confirm click the space bar'

            if(option_5.contains(mouse)):
                the_choice.text =    'You chose to give 250 NAIRA. To confirm click the space bar'


        def checkTheKeyboard():
            if(keys_this_frame[-1].name=='0'):
                the_choice.text =    'You chose to give 0 NAIRA. To confirm click the space bar'
            if(keys_this_frame[-1].name=='1'):
                the_choice.text =    'You chose to give 50 NAIRA. To confirm click the space bar'
            if(keys_this_frame[-1].name=='2'):
                the_choice.text =    'You chose to give 100 NAIRA. To confirm click the space bar'
            if(keys_this_frame[-1].name=='3'):
                the_choice.text =    'You chose to give 150 NAIRA. To confirm click the space bar'
            if(keys_this_frame[-1].name=='4'):
                the_choice.text =    'You chose to give 200 NAIRA. To confirm click the space bar'
            if(keys_this_frame[-1].name=='5'):
                the_choice.text =    'You chose to give 250 NAIRA. To confirm click the space bar'
            win.flip()
      Each Frame:
        keys_this_frame = _key_resp_allKeys

        if sum(mouse.getPressed()):
            checkTheMouse()
            the_choice.draw()
            core.wait(0.2)

        if len(keys_this_frame):
            checkTheKeyboard()
            the_choice.draw()
            core.wait(0.2)
            keys_this_frame = None
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome_scr
  Routine Instruction4baseline
  Routine Baseline
  Routine Instruct4tasks
  Routine Task1
  Routine ID_Xtrainfo
  Routine Individual_donation
  Routine last_stop_routine
